PsychoPy2experiment version="2024.2.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = untitled
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine beforeplay
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    ImageComponent imageBeforeplay
      image = image/kumnum.png
      size = (1.78, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent keyBeforeplay
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixation
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    ImageComponent imagefixation
      image = image/Screenshot (174).png
      size = (1.78, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine trialmemory
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    ImageComponent image_2
      image [set every repeat] = $Memory_image
      size = (1.78, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    KeyboardComponent keyspace
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      storeCorrect = True
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  Routine anwer
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    ImageComponent imaganswer
      image [set every repeat] = $answer_image
      size = (1.78, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = '1','2','3','4'
      correctAns = $answer_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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Flow
  Routine beforeplay
  LoopInitiator loopmemory loopType="TrialHandler"
    conditionsFile = memory_stim.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Memory_image': 'image/memory1.png', 'answer_key': None},
      {'Memory_image': 'image/memory1a.png', 'answer_key': 3},
      {'Memory_image': 'image/memory2.png', 'answer_key': None},
      {'Memory_image': 'image/memory2a.png', 'answer_key': 4},
      {'Memory_image': 'image/memory3.png', 'answer_key': None},
      {'Memory_image': 'image/memory3a.png', 'answer_key': 4},
      {'Memory_image': 'image/memory4.png', 'answer_key': None},
      {'Memory_image': 'image/memory4a.png', 'answer_key': 2},
      {'Memory_image': 'image/memory5.png', 'answer_key': None},
      {'Memory_image': 'image/memory5a.png', 'answer_key': 4},
      {'Memory_image': 'image/memory6.png', 'answer_key': None},
      {'Memory_image': 'image/memory6a.png', 'answer_key': 3},
      {'Memory_image': 'image/memory7.png', 'answer_key': None},
      {'Memory_image': 'image/memory7a.png', 'answer_key': 4},
      {'Memory_image': 'image/memory8.png', 'answer_key': None},
      {'Memory_image': 'image/memory8a.png', 'answer_key': 2},
      {'Memory_image': 'image/memory9.png', 'answer_key': None},
      {'Memory_image': 'image/memory9a.png', 'answer_key': 3},
      {'Memory_image': 'image/memory10.png', 'answer_key': None},
      {'Memory_image': 'image/memory10a.png', 'answer_key': 2},
      {'Memory_image': 'image/memory11.png', 'answer_key': None},
      {'Memory_image': 'image/memory11a.png', 'answer_key': 1},
      {'Memory_image': 'image/memory12.png', 'answer_key': None},
      {'Memory_image': 'image/memory12a.png', 'answer_key': 1},
      {'Memory_image': 'image/memory13.png', 'answer_key': None},
      {'Memory_image': 'image/memory13a.png', 'answer_key': 4}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
    Routine fixation
    Routine trialmemory
    Routine anwer
  LoopTerminator loopmemory
